CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['##', 'Adapted from the "CellCycleAnalysis.cpproj" pipeline published in "Cell cycle staging of individual cells by fluorescence microscopy" Roukos et al. 2015.', 'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain ".log") (file doesnot contain ".DS_Store")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".mat")
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/hilmar/Desktop/cellcycleAnalysis/Dapi_III_correction.tiff
    Name to assign this image:Dapi_III
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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enabled:False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
    Select the input image:Dapi
    Name the output image:DapiCorr
    Select the illumination function:Dapi_III
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Dapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:Dapi
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Dapi
    Name the output image:NucOverDapi
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:10|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_IntegratedIntensity_Dapi
    Select the image on which to display the measurements:Dapi
    Text color:#E80017
    Name the output image that has the measurements displayed:IntOverDapi
    Font size (points):6
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
DisplayHistogram:[module_num:11|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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_IntegratedIntensity_Dapi
    Number of bins:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Histogram of integrated fluorescence Intensities
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

FilterObjects:[module_num:12|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
    Select the objects to filter:Nuclei
    Name the output objects:FilterObjects_G1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:G1
    Select the measurement to filter by:Intensity_IntegratedIntensity_Dapi
    Filter using a minimum measurement value?:Yes
    Minimum value:800
    Filter using a maximum measurement value?:Yes
    Maximum value:1200

FilterObjects:[module_num:13|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
    Select the objects to filter:Nuclei
    Name the output objects:FilterObjects_S
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:S
    Select the measurement to filter by:Intensity_IntegratedIntensity_Dapi
    Filter using a minimum measurement value?:Yes
    Minimum value:530
    Filter using a maximum measurement value?:Yes
    Maximum value:800

FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei
    Name the output objects:FilterObjects_G2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:G2
    Select the measurement to filter by:Intensity_IntegratedIntensity_Dapi
    Filter using a minimum measurement value?:Yes
    Minimum value:1700
    Filter using a maximum measurement value?:Yes
    Maximum value:2300

MaskImage:[module_num:15|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enabled:False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
    Select the input image:Dapi
    Name the output image:Mask_G1
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects_G1
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    Invert the mask?:No

MaskImage:[module_num:16|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enabled:False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
    Select the input image:Dapi
    Name the output image:Mask_S
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects_S
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    Invert the mask?:No

MaskImage:[module_num:17|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enabled:False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
    Select the input image:Dapi
    Name the output image:Mask_G2
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjects_G2
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    Invert the mask?:No

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:FilterObjects_G1
    Measurement to display:Parent_Nuclei
    Select the image on which to display the measurements:Dapi
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    Name the output image that has the measurements displayed:DisplayImageG1
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    Image elements to save:Image
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    Display mode:Color
    Color map:tab10
    Display background image?:No
    Color map scale:Manual
    Color map range:32,39

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:FilterObjects_S
    Measurement to display:Parent_Nuclei
    Select the image on which to display the measurements:Dapi
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    Name the output image that has the measurements displayed:DisplayImageS
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    Image elements to save:Image
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    Display mode:Color
    Color map:rainbow
    Display background image?:No
    Color map scale:Manual
    Color map range:11,19

DisplayDataOnImage:[module_num:20|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
    Display object or image measurements?:Object
    Select the input objects:FilterObjects_G2
    Measurement to display:Parent_Nuclei
    Select the image on which to display the measurements:Dapi
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    Name the output image that has the measurements displayed:DisplayImageG2
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    Image elements to save:Image
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    Display mode:Color
    Color map:tab20b
    Display background image?:No
    Color map scale:Manual
    Color map range:41,49

OverlayObjects:[module_num:21|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enabled:False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
    Input:Dapi
    Name the output image:OverlayObjectsG1
    Objects:FilterObjects_G1
    Opacity:0.3

OverlayObjects:[module_num:22|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enabled:False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
    Input:OverlayObjectsG1
    Name the output image:OverlayObjectsG1_S
    Objects:FilterObjects_S
    Opacity:0.3

OverlayObjects:[module_num:23|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enabled:False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
    Input:OverlayObjectsG1_S
    Name the output image:OverlayObjectsG1_2_G2
    Objects:FilterObjects_G2
    Opacity:0.3

SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:IntOverDapi
    Select method for constructing file names:Sequential numbers
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    Enter single file name:IntOverDapi
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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